<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TransformRelative">
          <gl:Order>Append</gl:Order>
          <gl:Position>
            <gl:X>0</gl:X>
            <gl:Y>0</gl:Y>
            <gl:Z>0</gl:Z>
          </gl:Position>
          <gl:Rotation>
            <gl:Xyz>
              <gl:X>0</gl:X>
              <gl:Y>0</gl:Y>
              <gl:Z>0</gl:Z>
            </gl:Xyz>
            <gl:W>1</gl:W>
          </gl:Rotation>
          <gl:Scale>
            <gl:X>1</gl:X>
            <gl:Y>1</gl:Y>
            <gl:Z>1</gl:Z>
          </gl:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixReader">
          <dsp:Offset>0</dsp:Offset>
          <dsp:SampleRate>0</dsp:SampleRate>
          <dsp:ChannelCount>1</dsp:ChannelCount>
          <dsp:BufferLength>0</dsp:BufferLength>
          <dsp:Depth>U8</dsp:Depth>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:SampleRate>44100</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:DotProduct" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>DecodeFeatures</scr:Name>
        <scr:Description>Assuming the input is a 1D array, we take the first two elements as X and Y.</scr:Description>
        <scr:Expression>new(
it.GetReal(0) as X, 
it.GetReal(1) as Y,
it.GetReal(2) as VX,
it.GetReal(3) as VY,
it.GetReal(4) as FX,
it.GetReal(5) as FY
)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" Selector="X" />
          <Property Name="LocationY" Selector="Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <LocationX>-0.428125024</LocationX>
        <LocationY>0.983333349</LocationY>
        <Diameter>1.34857213</Diameter>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\EMGAcquisition.bonsai">
        <BufferSize>10</BufferSize>
        <NumChannels>64</NumChannels>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\MouseCursor.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:MetadataSource">
            <p1:Age>0</p1:Age>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>metadata.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="12" Label="Source1" />
      <Edge From="6" To="8" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>