<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Physics;assembly=Bonsai.Physics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p2="clr-namespace:Bonsai.Physics.Collision;assembly=Bonsai.Physics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>One</gl:SourceFactor>
              <gl:DestinationFactor>One</gl:DestinationFactor>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Cursor</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="BufferSize" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\DecodeEMG.bonsai">
        <BufferSize>10</BufferSize>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="X" Selector="X" />
          <Property Name="Y" Selector="Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>-0.09390769</gl:X>
          <gl:Y>0.0876774862</gl:Y>
          <gl:Z>0</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Position" Selector="Item1.X,Item1.Y,Item1.Z" />
        </PropertyMappings>
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SetTransform">
          <p1:Position>
            <p1:X>-0.093907691538333893</p1:X>
            <p1:Y>0.0876774862408638</p1:Y>
            <p1:Z>0</p1:Z>
          </p1:Position>
          <p1:Orientation xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" Selector="LocationX" />
          <Property Name="LocationY" Selector="LocationY" />
          <Property Name="Diameter" Selector="Diameter" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <LocationX>-0.09390769</LocationX>
        <LocationY>0.0876774862</LocationY>
        <Layer>0</Layer>
        <Diameter>0.1</Diameter>
        <ColorR>0.8</ColorR>
        <ColorG>0.3</ColorG>
        <ColorB>0.3</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateHashSpace">
          <p2:MinLevel xsi:nil="true" />
          <p2:MaxLevel xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="ResourceSubject">
        <Name>Space</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Space</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateSphere">
          <p2:Enabled>true</p2:Enabled>
          <p2:CategoryBits>1</p2:CategoryBits>
          <p2:CollideBits xsi:nil="true" />
          <p2:Position xsi:nil="true" />
          <p2:Orientation xsi:nil="true" />
          <p2:Radius>0.05</p2:Radius>
        </Combinator>
      </Expression>
      <Expression xsi:type="ResourceSubject">
        <Name>Cursor</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="19" Label="Source1" />
      <Edge From="9" To="14" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>