<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Physics.Collision;assembly=Bonsai.Physics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:Bonsai.Physics;assembly=Bonsai.Physics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>ResponseServer</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>5006</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>CommandServer</osc:Name>
          <osc:Port>5005</osc:Port>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CursorFilteredEMG.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TriggeredAcquisition.bonsai" />
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/decoding_params</osc:Address>
        <osc:TypeTag>ss</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as DecoderFilename,
Item2 as DynamicsFilename
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DecodingParams</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>One</gl:SourceFactor>
              <gl:DestinationFactor>One</gl:DestinationFactor>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Simulator</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateHashSpace">
                <p1:MinLevel xsi:nil="true" />
                <p1:MaxLevel xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateSphere">
                <p1:Enabled>true</p1:Enabled>
                <p1:CategoryBits>1</p1:CategoryBits>
                <p1:CollideBits xsi:nil="true" />
                <p1:Position xsi:nil="true" />
                <p1:Orientation xsi:nil="true" />
                <p1:Radius>0.05</p1:Radius>
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>Cursor</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateSphere">
                <p1:Enabled>true</p1:Enabled>
                <p1:CategoryBits>2</p1:CategoryBits>
                <p1:CollideBits>1</p1:CollideBits>
                <p1:Position xsi:nil="true" />
                <p1:Orientation xsi:nil="true" />
                <p1:Radius>0.1</p1:Radius>
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>HoldTarget</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateSphere">
                <p1:Enabled>true</p1:Enabled>
                <p1:CategoryBits>4</p1:CategoryBits>
                <p1:CollideBits>1</p1:CollideBits>
                <p1:Position xsi:nil="true" />
                <p1:Orientation xsi:nil="true" />
                <p1:Radius>0.1</p1:Radius>
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>ReachTarget</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/session_params</osc:Address>
        <osc:TypeTag>iis</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as Min,
Item2 as Max,
Item3 as RecordPath
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>SessionParams</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/trial_params</osc:Address>
        <osc:TypeTag>sfffiii</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as TrialIndex,
Item2 as TargetX,
Item3 as TargetY,
Item4 as Radius,
Item5 as TimeoutTime,
Item6 as HoldingTime,
Item7 as ReachTime
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>StartTrial</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionParams</Name>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>Trials</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RecordPath</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/session_result_.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParams</Name>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RunTrial</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>CreateTrial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SelectMany">
                          <Name>CenterHold</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Draw</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HoldTarget</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="LocationX" Selector="LocationX" />
                                  <Property Name="LocationY" Selector="LocationY" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TrialParams</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Radius</Selector>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="FloatProperty">
                                  <Value>5</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Diameter" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                                <LocationX>0</LocationX>
                                <LocationY>0</LocationY>
                                <Layer>0</Layer>
                                <Diameter>0.25</Diameter>
                                <ColorR>1</ColorR>
                                <ColorG>1</ColorG>
                                <ColorB>1</ColorB>
                                <ColorA>1</ColorA>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HoldTarget</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:LatestOnUpdateFrame" />
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Collision</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p1:CollideGeom">
                                        <p1:MaxContacts>1</p1:MaxContacts>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Length</Selector>
                                    </Expression>
                                    <Expression xsi:type="GreaterThan">
                                      <Operand xsi:type="IntProperty">
                                        <Value>0</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="PublishSubject">
                                <Name>HoldingState</Name>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>TimeoutTimer</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>TrialParams</Name>
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>TimeSpan.FromMilliseconds(TimeoutTime)</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DueTime" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Timer">
                                        <gl:DueTime>PT3.5S</gl:DueTime>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>HoldingTimer</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>HoldingState</Name>
                                    </Expression>
                                    <Expression xsi:type="Condition">
                                      <Name>Holding</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>HoldingState</Name>
                                    </Expression>
                                    <Expression xsi:type="Condition">
                                      <Name>NotHolding</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="BitwiseNot" />
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>TrialParams</Name>
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>TimeSpan.FromMilliseconds(HoldingTime)</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DueTime" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Timer">
                                        <gl:DueTime>PT0.75S</gl:DueTime>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:TakeUntil" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:SubscribeWhen" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Repeat" />
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="9" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="8" Label="Source2" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateFrame" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeStep.ElapsedTime</Selector>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="8" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="8" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source3" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="17" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source2" />
                              <Edge From="17" To="21" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="21" Label="Source2" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="AsyncSubject">
                          <Name>HoldResult</Name>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Name>Hold</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SelectMany">
                          <Name>ReachToTarget</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Draw</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TrialParams</Name>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>UpdateTarget</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>ReachTarget</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="InputMapping">
                                      <PropertyMappings>
                                        <Property Name="X" Selector="TargetX" />
                                        <Property Name="Y" Selector="TargetY" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:CreateVector3">
                                        <gl:X>0</gl:X>
                                        <gl:Y>1</gl:Y>
                                        <gl:Z>0</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:CombineLatest" />
                                    </Expression>
                                    <Expression xsi:type="InputMapping">
                                      <PropertyMappings>
                                        <Property Name="Position" Selector="Item1.X,Item1.Y,Item1.Z" />
                                      </PropertyMappings>
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p2:SetTransform">
                                        <p2:Position>
                                          <p2:X>0</p2:X>
                                          <p2:Y>1</p2:Y>
                                          <p2:Z>0</p2:Z>
                                        </p2:Position>
                                        <p2:Orientation xsi:nil="true" />
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="4" Label="Source2" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="LocationX" Selector="LocationX" />
                                  <Property Name="LocationY" Selector="LocationY" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TrialParams</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Radius</Selector>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="FloatProperty">
                                  <Value>3</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Diameter" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                                <LocationX>0</LocationX>
                                <LocationY>1</LocationY>
                                <Layer>0</Layer>
                                <Diameter>0.15</Diameter>
                                <ColorR>1</ColorR>
                                <ColorG>0</ColorG>
                                <ColorB>0</ColorB>
                                <ColorA>1</ColorA>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ReachTarget</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:LatestOnUpdateFrame" />
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Collision</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p1:CollideGeom">
                                        <p1:MaxContacts>1</p1:MaxContacts>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Length</Selector>
                                    </Expression>
                                    <Expression xsi:type="GreaterThan">
                                      <Operand xsi:type="IntProperty">
                                        <Value>0</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="PublishSubject">
                                <Name>ReachState</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ReachState</Name>
                              </Expression>
                              <Expression xsi:type="Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>ReachTimer</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>TrialParams</Name>
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>TimeSpan.FromMilliseconds(ReachTime)</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DueTime" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Timer">
                                        <gl:DueTime>PT5S</gl:DueTime>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>-1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateFrame" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeStep.ElapsedTime</Selector>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="8" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="8" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source3" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="18" Label="Source2" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="22" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source2" />
                              <Edge From="22" To="23" Label="Source1" />
                              <Edge From="23" To="24" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="AsyncSubject">
                          <Name>ReachResult</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HoldResult</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ReachResult</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialParams</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Item2 == null ?
new("No Hold" as Outcome, single(Item1.Item2) as HoldTime, single.NaN as ReachTime, single(Item3.TargetX) as TargetX, single(Item3.TargetY) as TargetY) :
new(Item2.Item1 &lt; 0? "Miss" : "Hit" as Outcome, single(Item1.Item2) as HoldTime, single(Item2.Item2) as ReachTime, single(Item3.TargetX) as TargetX, single(Item3.TargetY) as TargetY)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EmgData</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TrialIndex</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RecordPath</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}_emg_.bin</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>C:/Users/spencer/data/self_test/spencer/center_hold/session_0/1_emg_.bin</dsp:Path>
                            <dsp:Suffix>Timestamp</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>FilteredEMG</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TrialIndex</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RecordPath</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}_emg_filtered_.bin</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>C:/Users/spencer/data/self_test/spencer/center_hold/session_0/1_emg_filtered_.bin</dsp:Path>
                            <dsp:Suffix>Timestamp</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RenderFrame" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TrialIndex</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RecordPath</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}_behavior_.csv</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>FrameEventLogger</Name>
                          <Description>Creates and initializes a CSV file, and matching behavior subject, used to log events with frame timing.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>Name</MemberName>
                                <Name>Name</Name>
                                <Description>The name of the subject on which events will be logged.</Description>
                                <Category>Subject</Category>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:IgnoreElements" />
                              </Expression>
                              <Expression xsi:type="BehaviorSubject">
                                <Name>Events</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Append" />
                                <Property Name="Overwrite" />
                                <Property Name="Suffix" />
                                <Property Name="FileName" />
                              </Expression>
                              <Expression xsi:type="Sink">
                                <Name>CsvLogger</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>TimeStep.ElapsedRealTime</Selector>
                                    </Expression>
                                    <Expression xsi:type="rx:Accumulate" />
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:ElementIndex" />
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Append" />
                                      <Property Name="Overwrite" />
                                      <Property Name="Suffix" />
                                      <Property Name="FileName" />
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Name" />
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Events</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>new(
Item2.Index as Frame,
Item2.Value as Timestamp,
Item1 as Value)</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="io:CsvWriter">
                                      <io:FileName>C:/Users/spencer/data/self_test/spencer/center_hold/session_0/1_behavior_.csv</io:FileName>
                                      <io:Delimiter>,</io:Delimiter>
                                      <io:Append>false</io:Append>
                                      <io:Overwrite>false</io:Overwrite>
                                      <io:Suffix>Timestamp</io:Suffix>
                                      <io:IncludeHeader>true</io:IncludeHeader>
                                      <io:Selector />
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="7" Label="Source2" />
                                    <Edge From="4" To="9" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="3" Label="Source2" />
                              <Edge From="0" To="6" Label="Source2" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="4" To="6" Label="Source1" />
                              <Edge From="5" To="6" Label="Source3" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CursorTrajectory</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                          <Format>{0},{1}</Format>
                          <Selector>LocationX,LocationY</Selector>
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Radius</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="FloatProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Diameter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionParams</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Min" Selector="Min" />
                            <Property Name="Max" Selector="Max" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>DecodeEMG</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FilteredEMG</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Submatrix">
                                  <dsp:StartRow>0</dsp:StartRow>
                                  <dsp:EndRow>64</dsp:EndRow>
                                  <dsp:StartCol>0</dsp:StartCol>
                                  <dsp:EndCol xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DecodingParams</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>DecoderFilename</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DecoderFileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DecodingParams</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>DynamicsFilename</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DynamicsFileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Min" />
                                <Property Name="Max" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>6</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="StateDimension" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p3:UpdateDecoder">
                                  <p3:BufferSize>1</p3:BufferSize>
                                  <p3:DecoderFileName>C:/Users/spencer/Documents/kyberphysics/metadata/self_test/spencer/decoder.bin</p3:DecoderFileName>
                                  <p3:DynamicsFileName>C:/Users/spencer/Documents/kyberphysics/metadata/self_test/spencer/dynamics.bin</p3:DynamicsFileName>
                                  <p3:StateDimension>6</p3:StateDimension>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Submatrix">
                                  <dsp:StartRow>4</dsp:StartRow>
                                  <dsp:EndRow>6</dsp:EndRow>
                                  <dsp:StartCol>0</dsp:StartCol>
                                  <dsp:EndCol xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Rescale">
                                  <dsp:Min>-50</dsp:Min>
                                  <dsp:Max>50</dsp:Max>
                                  <dsp:RangeMin>-1</dsp:RangeMin>
                                  <dsp:RangeMax>1</dsp:RangeMax>
                                  <dsp:RescaleType>Clamp</dsp:RescaleType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p3:ConvertToVector2" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="11" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="11" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="11" Label="Source3" />
                              <Edge From="8" To="13" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source4" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>UpdateCursor</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Cursor</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="InputMapping">
                                <PropertyMappings>
                                  <Property Name="X" Selector="X" />
                                  <Property Name="Y" Selector="Y" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:CreateVector3">
                                  <gl:X>-1</gl:X>
                                  <gl:Y>1</gl:Y>
                                  <gl:Z>0</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="InputMapping">
                                <PropertyMappings>
                                  <Property Name="Position" Selector="Item1.X,Item1.Y,Item1.Z" />
                                </PropertyMappings>
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:SetTransform">
                                  <p2:Position>
                                    <p2:X>-1</p2:X>
                                    <p2:Y>1</p2:Y>
                                    <p2:Z>0</p2:Z>
                                  </p2:Position>
                                  <p2:Orientation xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="4" Label="Source2" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PublishSubject">
                          <Name>CursorTrajectory</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" Selector="LocationX" />
                            <Property Name="LocationY" Selector="LocationY" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                          <LocationX>-1</LocationX>
                          <LocationY>1</LocationY>
                          <Layer>10</Layer>
                          <Diameter>0.1</Diameter>
                          <ColorR>0</ColorR>
                          <ColorG>0</ColorG>
                          <ColorB>1</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="10" Label="Source1" />
                        <Edge From="8" To="10" Label="Source2" />
                        <Edge From="9" To="10" Label="Source3" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="14" To="22" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="19" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source2" />
                        <Edge From="23" To="31" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="28" Label="Source2" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source2" />
                        <Edge From="32" To="40" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="34" To="37" Label="Source2" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                        <Edge From="37" To="38" Label="Source1" />
                        <Edge From="38" To="39" Label="Source1" />
                        <Edge From="39" To="40" Label="Source2" />
                        <Edge From="41" To="42" Label="Source1" />
                        <Edge From="43" To="44" Label="Source1" />
                        <Edge From="44" To="45" Label="Source1" />
                        <Edge From="45" To="46" Label="Source1" />
                        <Edge From="46" To="54" Label="Source3" />
                        <Edge From="47" To="54" Label="Source1" />
                        <Edge From="48" To="49" Label="Source1" />
                        <Edge From="49" To="50" Label="Source1" />
                        <Edge From="50" To="51" Label="Source1" />
                        <Edge From="51" To="52" Label="Source1" />
                        <Edge From="52" To="53" Label="Source1" />
                        <Edge From="53" To="54" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="osc:SendMessage">
                    <osc:Connection>ResponseServer</osc:Connection>
                    <osc:Address>/trial_done</osc:Address>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:/Users/spencer/data/self_test/spencer/center_hold/session_0/session_result_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Outcome</Selector>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>DrawResult</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>75</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it == "Hit" ? "Hit" : ""</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
              <Text />
              <Font>Microsoft Sans Serif, 150pt</Font>
              <Alignment>Center</Alignment>
              <LineAlignment>Center</LineAlignment>
              <TextRenderingHint>AntiAliasGridFit</TextRenderingHint>
              <Color>
                <Val0>255</Val0>
                <Val1>255</Val1>
                <Val2>255</Val2>
                <Val3>255</Val3>
              </Color>
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/stop</osc:Address>
        <osc:TypeTag />
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>