<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>ResponseServer</osc:Name>
          <osc:Port>1006</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>5006</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>CommandServer</osc:Name>
          <osc:Port>5005</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateRenderState">
                <gl:RenderState>
                  <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
                    <gl:SourceFactor>One</gl:SourceFactor>
                    <gl:DestinationFactor>One</gl:DestinationFactor>
                  </gl:StateConfiguration>
                </gl:RenderState>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TriggeredAcquisition.bonsai" />
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/task_params</osc:Address>
        <osc:TypeTag>iiis</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as SamplesPerCommand,
Item2 as SamplesPerCue,
Item3 as NumRepetitions,
Item4 as Command)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TaskParams</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskParams</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>RecordTrialSamples</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RecordingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BufferSize</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RecordingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RecordPath</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EmgData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskParams</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>TotalSamplesPerTrial</scr:Name>
              <scr:Expression>(SamplesPerCommand+SamplesPerCue)*NumRepetitions</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>8000</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Command</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{1}_{2:yyyy_MM_dd_H_mm}.bin</Format>
              <Selector>Value.Item1,Value.Item2,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:/Users/spencer/data/experiment_1/spencer_wilson/session_1/index finger extension_2021_08_13.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="13" Label="Source1" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>ResponseServer</osc:Connection>
        <osc:Address>/record_end</osc:Address>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskParams</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>TrialPresentation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>SinglePresentation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Diameter>0.5</Diameter>
                    <ColorR>0</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SamplesPerCommand</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\EmgTimer.bonsai">
                    <Count>10000</Count>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SamplesPerCue</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\EmgTimer.bonsai">
                    <Count>6000</Count>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Zy</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="12" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NumRepetitions</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Command</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
              <Text>index finger extension</Text>
              <Font>Rockwell, 100pt, style=Bold</Font>
              <Alignment>Center</Alignment>
              <LineAlignment>Near</LineAlignment>
              <TextRenderingHint>SystemDefault</TextRenderingHint>
              <Color>
                <Val0>255</Val0>
                <Val1>255</Val1>
                <Val2>255</Val2>
                <Val3>255</Val3>
              </Color>
              <ExtentX>1</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>-0.5</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/stop</osc:Address>
        <osc:TypeTag />
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>