<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>CommandServer</osc:Name>
          <osc:Port>5005</osc:Port>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>ResponseServer</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>5006</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TriggeredAcquisition.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\BarFilteredEMG.bonsai" />
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/session_params</osc:Address>
        <osc:TypeTag>f</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it as BarScale
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>SessionParams</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionParams</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BarScale</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Scale" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BarHeights</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilteredEMG</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Scale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth xsi:nil="true" />
                <dsp:Scale>0.0099999997764825821</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:LatestOnUpdateFrame" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>BarHeights</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Events</Name>
        <Append>false</Append>
        <Overwrite>true</Overwrite>
        <Suffix>None</Suffix>
        <FileName>C:/Users/spencer/data/logging/log.csv</FileName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RecordingParams</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>GenerateBarOrder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>23</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>23</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RecordingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RecordPath</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/bar_order_.csv</Format>
              <Selector />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NumChannels</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>-1</RangeMin>
              <RangeMax>1</RangeMax>
              <Count>64</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:/Users/spencer/data/emg_olympics/spencer/calibration_bars/session_3/bar_order_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>BarOrder</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/task_params</osc:Address>
        <osc:TypeTag>ii</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Value.Item1 as SamplesPerCommand,
Value.Item2 as TargetChannel,
Timestamp as Timestamp
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TaskParams</Name>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>StartTask</Name>
      </Expression>
      <Expression xsi:type="Defer">
        <Name>DrawRelax</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartTask</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnUpdateFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
              <Text>Relax</Text>
              <Font>Microsoft Sans Serif, 150pt</Font>
              <Alignment>Center</Alignment>
              <LineAlignment>Center</LineAlignment>
              <TextRenderingHint>AntiAliasGridFit</TextRenderingHint>
              <Color>
                <Val0>255</Val0>
                <Val1>180</Val1>
                <Val2>150</Val2>
                <Val3>255</Val3>
              </Color>
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>VisualizeAndRecord</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BarHeightRendered</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RecordRawSamples</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RecordingParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RecordPath</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EmgData</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TargetChannel</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}/{1}_emg_.bin</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SamplesPerCommand</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\EmgTimer.bonsai">
                    <Count>24000</Count>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:/Users/spencer/data/emg_olympics/matthias/calibration_bars/session_0/63_emg_.bin</dsp:Path>
                      <dsp:Suffix>Timestamp</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="14" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="15" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="osc:SendMessage">
              <osc:Connection>ResponseServer</osc:Connection>
              <osc:Address>/record_end</osc:Address>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RecordingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RecordPath</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TargetChannel</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{1}_bars_.bin</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SamplesPerCommand</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\EmgTimer.bonsai">
              <Count>24000</Count>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BarHeightRendered</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BarOrder</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>BarGraph</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>BarParams</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BarParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BarParams</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TargetChannel</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BarHeights</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Index" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item2.value as LocX,
0.01 as ExtX,
Item1/2-0.8 as LocY,
single (Item1) as ExtY,
Item2.index == Item3?0:1 as IsColor)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" Selector="Item2.ExtX" />
                      <Property Name="ExtentY" Selector="Item2.ExtY" />
                      <Property Name="LocationX" Selector="Item2.LocX" />
                      <Property Name="LocationY" Selector="Item2.LocY" />
                      <Property Name="ColorG" Selector="Item2.IsColor" />
                      <Property Name="ColorB" Selector="Item2.IsColor" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.01</ExtentX>
                    <ExtentY>0.5468149</ExtentY>
                    <LocationX>0.4920635</LocationX>
                    <LocationY>-0.526592553</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.ExtY</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="14" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="12" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="14" To="17" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RecordingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NumChannels</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>64</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format xsi:nil="true" />
              <Selector xsi:nil="true" />
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:/Users/spencer/data/emg_olympics/matthias/calibration_bars/session_0/63_bars_.bin</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>BarHeightRendered</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="28" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="30" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="25" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/stop</osc:Address>
        <osc:TypeTag />
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>