WorkflowBuilder(Version=2.6.2)
Bonsai.Osc.CreateUdpClient(Name=ResponseServer, Port=0, RemoteHostName=127.0.0.1, RemotePort=5006)
Bonsai.Osc.CreateUdpClient(Name=CommandServer, Port=5005, RemotePort=0)
IncludeWorkflow(Path=Extensions\TriggeredAcquisition.bonsai)

Bonsai.Osc.ReceiveMessage(Address=/decoding_params, TypeTag=ssss, Connection=CommandServer)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Item1 as DecoderFilename,
    Item2 as DynamicsFilename,
    Item3 as VariancePath,
    Item4 as OffsetPath
    )
-> BehaviorSubject DecodingParams

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Black
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=One, DestinationFactor=One)))
-> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> PublishSubject Draw

GroupWorkflow Simulator
    Bonsai.Physics.Collision.CreateHashSpace(MinLevel=nil, MaxLevel=nil)
    -> ResourceSubject Space

    SubscribeSubject Space
    -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=1, CollideBits=nil, Position=nil, Orientation=nil, Radius=0.05)
    -> ResourceSubject Cursor

    SubscribeSubject Space
    -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=2, CollideBits=1, Position=nil, Orientation=nil, Radius=0.1)
    -> ResourceSubject HoldTarget

    SubscribeSubject Space
    -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=4, CollideBits=1, Position=nil, Orientation=nil, Radius=0.1)
    -> ResourceSubject ReachTarget

Bonsai.Osc.ReceiveMessage(Address=/session_params, TypeTag=s, Connection=CommandServer)
-> Bonsai.Scripting.ExpressionTransform
  Expression: new(it as RecordPath)
-> BehaviorSubject SessionParams

Bonsai.Osc.ReceiveMessage(Address=/trial_params, TypeTag=sfffiii, Connection=CommandServer)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Item1 as TrialIndex,
    Item2 as TargetX,
    Item3 as TargetY,
    Item4 as Radius,
    Item5 as TimeoutTime,
    Item6 as HoldingTime,
    Item7 as ReachTime
    )
-> BehaviorSubject TrialParams
-> PublishSubject StartTrial

SubscribeSubject DecodingParams
-> CreateObservable FilterStandardizeOffset
    Disable SubscribeSubject RecordingParams
    -> Disable MemberSelector(Selector=SamplingFreq)
    -> Disable PropertyMapping(SampleRate) => #2
    Disable SubscribeSubject RecordingParams
    -> Disable MemberSelector(Selector=NumChannels)
    -> Disable PropertyMapping(NumChannels) => #5
    Disable SubscribeSubject EmgData
    -> Disable Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Disable Bonsai.Dsp.Submatrix(StartRow=0, EndRow=64, StartCol=0, EndCol=nil) => #8
    #8, #2 -> Disable Bonsai.Dsp.FrequencyFilter(SampleRate=2000, Cutoff1=0.1, Cutoff2=0, KernelLength=250, FilterType=HighPass) => #9
    Disable SubscribeSubject DecodingParams
    -> Disable MemberSelector(Selector=VariancePath)
    -> Disable PropertyMapping(VarianceFileName) => #12
    Source0=#9, Source2=#5, Source3=#12 -> Disable StandardizeEMG(VarianceFileName=C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/spencer/variance.bin, NumChannels=64)
    -> Disable Bonsai.Dsp.Abs
    -> Disable Bonsai.Dsp.FrequencyFilter(SampleRate=2000, Cutoff1=5, Cutoff2=0, KernelLength=500, FilterType=LowPass)
    -> Disable IncludeWorkflow(Path=Extensions\Channel56Zero.bonsai)
    -> Disable Bonsai.Dsp.Reduce(Axis=1, Operation=Avg)
    -> Disable WorkflowOutput

    Disable SubscribeSubject RecordingParams
    -> Disable MemberSelector(Selector=SamplingFreq)
    -> Disable PropertyMapping(SampleRate) => #21
    Disable SubscribeSubject RecordingParams
    -> Disable MemberSelector(Selector=SamplingFreq)
    -> Disable PropertyMapping(SampleRate) => #24
    Disable SubscribeSubject RecordingParams
    -> Disable MemberSelector(Selector=NumChannels)
    -> Disable PropertyMapping(NumChannels) => #27
    Disable SubscribeSubject EmgData
    -> Disable Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Disable Bonsai.Dsp.Submatrix(StartRow=0, EndRow=64, StartCol=0, EndCol=nil) => #30
    #30, #24 -> Disable Bonsai.Dsp.FrequencyFilter(SampleRate=2000, Cutoff1=0.1, Cutoff2=0, KernelLength=250, FilterType=HighPass) => #31
    Disable SubscribeSubject DecodingParams
    -> Disable MemberSelector(Selector=VariancePath)
    -> Disable PropertyMapping(VarianceFileName) => #34
    Source0=#31, Source2=#27, Source3=#34 -> Disable StandardizeEMG(VarianceFileName=C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/miranda/variance.bin, NumChannels=64)
    -> Disable Bonsai.Dsp.Abs => #36
    #36, #21 -> Disable Bonsai.Dsp.FrequencyFilter(SampleRate=2000, Cutoff1=5, Cutoff2=0, KernelLength=750, FilterType=LowPass) => #37
    Disable SubscribeSubject RecordingParams
    -> Disable MemberSelector(Selector=NumChannels)
    -> Disable PropertyMapping(ChannelCount) => #40
    Disable SubscribeSubject DecodingParams
    -> Disable MemberSelector(Selector=OffsetPath)
    -> Disable PropertyMapping(Path) => #43
    #43, #40 -> Disable Bonsai.Dsp.MatrixReader => #44
      Path=C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/miranda/offsets.bin
      FileName=C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/miranda/offsets.bin
      Offset=0
      SampleRate=0
      ChannelCount=64
      BufferLength=1
      Depth=F32
      Layout=RowMajor
    #37, #44 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable IncludeWorkflow(Path=Extensions\Channel56Zero.bonsai)
    -> Disable Bonsai.Dsp.Reduce(Axis=1, Operation=Avg)
    -> Disable WorkflowOutput

    SubscribeSubject RecordingParams
    -> MemberSelector(Selector=SamplingFreq)
    -> PropertyMapping(SampleRate) => #52
    SubscribeSubject RecordingParams
    -> MemberSelector(Selector=NumChannels)
    -> PropertyMapping(NumChannels) => #55
    SubscribeSubject EmgData
    -> IncludeWorkflow(Path=Extensions\Channel56Zero.bonsai)
    -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Bonsai.Dsp.Submatrix(StartRow=0, EndRow=64, StartCol=0, EndCol=nil) => #59
    #59, #52 -> Bonsai.Dsp.FrequencyFilter(SampleRate=2000, Cutoff1=0.1, Cutoff2=0, KernelLength=250, FilterType=HighPass) => #60
    SubscribeSubject DecodingParams
    -> MemberSelector(Selector=VariancePath)
    -> PropertyMapping(VarianceFileName) => #63
    Source0=#60, Source2=#55, Source3=#63 -> StandardizeEMG(VarianceFileName=C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/andrei/variance.bin, NumChannels=64)
    -> Bonsai.Dsp.Abs
    -> Bonsai.Dsp.FrequencyFilter(SampleRate=2000, Cutoff1=5, Cutoff2=0, KernelLength=750, FilterType=LowPass)
    -> Bonsai.Dsp.Submatrix(StartRow=0, EndRow=nil, StartCol=0, EndCol=1)
    -> WorkflowOutput
-> Switch
-> PublishSubject FilteredEMG

SubscribeSubject SessionParams
-> CreateObservable Trials
    WorkflowInput Source1
    -> MemberSelector(Selector=RecordPath)
    -> Format(Format={0}/session_result_.csv, Selector=it)
    -> PropertyMapping(FileName) => #3
    SubscribeSubject StartTrial
    -> SelectMany RunTrial => #5
        WorkflowInput Source1
        -> SelectMany CreateTrial
            Bonsai.Shaders.Timer(DueTime=PT0S)
            -> SelectMany CenterHold
                SubscribeSubject Draw => #0
                SubscribeSubject HoldTarget
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Position.X as LocationX,
                    Position.Y as LocationY,
                    2*Radius as Diameter)
                -> PropertyMapping(LocationX(Selector=LocationX), LocationY(Selector=LocationY)) => #3
                SubscribeSubject TrialParams
                -> MemberSelector(Selector=Radius)
                -> Multiply(Operand=FloatProperty(Value=6))
                -> PropertyMapping(Diameter) => #7
                #0, #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=0.3, ColorR=1, ColorG=1, ColorB=1, ColorA=1)

                SubscribeSubject HoldTarget
                -> Bonsai.Shaders.LatestOnUpdateFrame
                -> GroupWorkflow Collision
                    WorkflowInput Source1
                    -> Bonsai.Physics.Collision.CollideGeom(MaxContacts=1)
                    -> MemberSelector(Selector=Length)
                    -> GreaterThan(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> PublishSubject HoldingState

                GroupWorkflow TimeoutTimer
                    SubscribeSubject TrialParams
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: TimeSpan.FromMilliseconds(TimeoutTime)
                    -> PropertyMapping(DueTime)
                    -> Bonsai.Shaders.Timer(DueTime=PT3.5S)
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #14
                GroupWorkflow HoldingTimer
                    SubscribeSubject HoldingState
                    -> Condition Holding => #1
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject HoldingState
                    -> Condition NotHolding => #3
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject TrialParams
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: TimeSpan.FromMilliseconds(HoldingTime)
                    -> PropertyMapping(DueTime)
                    -> Bonsai.Shaders.Timer(DueTime=PT0.75S) => #7
                    #7, #3 -> TakeUntil => #8
                    #8, #1 -> SubscribeWhen
                    -> Repeat
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #16
                #14, #16 -> Merge => #17
                Bonsai.Shaders.UpdateFrame
                -> MemberSelector(Selector=TimeStep.ElapsedTime)
                -> Accumulate => #20
                #17, #20 -> WithLatestFrom
                -> Take(Count=1)
                -> WorkflowOutput
            -> AsyncSubject HoldResult
            -> Condition Hold
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany ReachToTarget
                SubscribeSubject Draw => #0
                SubscribeSubject TrialParams
                -> GroupWorkflow UpdateTarget
                    SubscribeSubject ReachTarget => #0
                    WorkflowInput Source1
                    -> InputMapping(X(Selector=TargetX), Y(Selector=TargetY))
                    -> Bonsai.Shaders.CreateVector3(X=0.5, Y=-0.87, Z=0) => #3
                    #3, #0 -> CombineLatest
                    -> InputMapping(Selector=Item2, Position(Selector="Item1.X,Item1.Y,Item1.Z"))
                    -> Bonsai.Physics.SetTransform(Position(X=0.5, Y=-0.87000000476837158, Z=0), Orientation=nil)
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression:
                        new(
                        Position.X as LocationX,
                        Position.Y as LocationY,
                        2*Radius as Diameter)
                    -> WorkflowOutput
                -> PropertyMapping(LocationX(Selector=LocationX), LocationY(Selector=LocationY)) => #3
                SubscribeSubject TrialParams
                -> MemberSelector(Selector=Radius)
                -> Multiply(Operand=FloatProperty(Value=3))
                -> PropertyMapping(Diameter) => #7
                #0, #3, #7 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.5, LocationY=-0.87, Layer=0, Diameter=0.15, ColorR=1, ColorG=0, ColorB=0, ColorA=1)

                SubscribeSubject ReachTarget
                -> Bonsai.Shaders.LatestOnUpdateFrame
                -> GroupWorkflow Collision
                    WorkflowInput Source1
                    -> Bonsai.Physics.Collision.CollideGeom(MaxContacts=1)
                    -> MemberSelector(Selector=Length)
                    -> GreaterThan(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> PublishSubject ReachState

                SubscribeSubject ReachState
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #15
                GroupWorkflow ReachTimer
                    SubscribeSubject TrialParams
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: TimeSpan.FromMilliseconds(ReachTime)
                    -> PropertyMapping(DueTime)
                    -> Bonsai.Shaders.Timer(DueTime=PT5S)
                    -> WorkflowOutput
                -> IntProperty(Value=-1) => #17
                #17, #15 -> Merge => #18
                Bonsai.Shaders.UpdateFrame
                -> MemberSelector(Selector=TimeStep.ElapsedTime)
                -> Accumulate => #21
                #18, #21 -> WithLatestFrom
                -> Take(Count=1)
                -> WorkflowOutput
            -> LastOrDefault
            -> AsyncSubject ReachResult

            SubscribeSubject HoldResult => #7
            SubscribeSubject ReachResult => #8
            SubscribeSubject TrialParams => #9
            #7, #8, #9 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                Item2 == null ?
                new("No Hold" as Outcome, single(Item1.Item2) as HoldTime, single.NaN as ReachTime, single(Item3.TargetX) as TargetX, single(Item3.TargetY) as TargetY) :
                new(Item2.Item1 < 0? "Miss" : "Hit" as Outcome, single(Item1.Item2) as HoldTime, single(Item2.Item2) as ReachTime, single(Item3.TargetX) as TargetX, single(Item3.TargetY) as TargetY)
            -> WorkflowOutput

            SubscribeSubject EmgData => #14
            SubscribeSubject TrialParams
            -> MemberSelector(Selector=TrialIndex) => #16
            SubscribeSubject SessionParams
            -> MemberSelector(Selector=RecordPath) => #18
            #18, #16 -> Zip
            -> Format(Format={0}/{1}_emg_.bin, Selector="Item1,Item2")
            -> PropertyMapping(Path) => #21
            #14, #21 -> Bonsai.Dsp.MatrixWriter(Path=C:/Users/spencer/data/emg_olympics/andrei/center_hold/session_1/2_emg_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

            SubscribeSubject FilteredEMG => #23
            SubscribeSubject TrialParams
            -> MemberSelector(Selector=TrialIndex) => #25
            SubscribeSubject SessionParams
            -> MemberSelector(Selector=RecordPath) => #27
            #27, #25 -> Zip
            -> Format(Format={0}/{1}_emg_filtered_.bin, Selector="Item1,Item2")
            -> PropertyMapping(Path) => #30
            #23, #30 -> Bonsai.Dsp.MatrixWriter(Path=C:/Users/spencer/data/emg_olympics/andrei/center_hold/session_1/2_emg_filtered_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

            Bonsai.Shaders.RenderFrame => #32
            SubscribeSubject TrialParams
            -> MemberSelector(Selector=TrialIndex) => #34
            SubscribeSubject SessionParams
            -> MemberSelector(Selector=RecordPath) => #36
            #36, #34 -> Zip
            -> Format(Format={0}/{1}_behavior_.csv, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #39
            #32, #39 -> GroupWorkflow FrameEventLogger(Description="Creates and initializes a CSV file, and matching behavior subject, used to log events with frame timing.")
                ExternalizedProperty Name(MemberName=Name, Description="The name of the subject on which events will be logged.", Category=Subject) => #0
                StringProperty
                -> IgnoreElements => #2
                #2, #0 -> BehaviorSubject Events
                WorkflowInput Source1 => #4
                ExternalizedMapping(Append, Overwrite, Suffix, FileName) => #5
                #4, #0, #5 -> Sink CsvLogger
                    WorkflowInput Source1
                    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                    -> Accumulate
                    -> ElementIndex => #3
                    ExternalizedMapping(Append, Overwrite, Suffix, FileName) => #4
                    ExternalizedMapping(Name)
                    -> SubscribeSubject Events => #6
                    #6, #3 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform => #8
                      Expression:
                        new(
                        Item2.Index as Frame,
                        Item2.Value as Timestamp,
                        Item1 as Value)
                    #8, #4 -> Bonsai.IO.CsvWriter
                      FileName=C:/Users/spencer/data/emg_olympics/andrei/center_hold/session_1/2_behavior_.csv
                      Delimiter=","
                      Append=false
                      Overwrite=false
                      Suffix=Timestamp
                      IncludeHeader=true
                      Selector=""
                    -> WorkflowOutput
                -> WorkflowOutput

            SubscribeSubject CursorTrajectory
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="{0},{1}", Selector="LocationX,LocationY")

            SubscribeSubject Draw => #43
            SubscribeSubject CursorTrajectory
            -> MemberSelector(Selector=LocationX)
            -> PropertyMapping(LocationX) => #46
            SubscribeSubject CursorTrajectory
            -> MemberSelector(Selector=LocationY)
            -> PropertyMapping(LocationY) => #49
            SubscribeSubject TrialParams
            -> MemberSelector(Selector=Radius)
            -> Multiply(Operand=FloatProperty(Value=2))
            -> PropertyMapping(Diameter) => #53
            #43, #46, #49, #53 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawCircle.bonsai
              LocationX=-0.000191643834
              LocationY=-0.00243872521
              Layer=10
              Diameter=0.1
              ColorR=0
              ColorG=0
              ColorB=1
              ColorA=1

            GroupWorkflow DecodeEMG => #55
                SubscribeSubject FilteredEMG => #0
                SubscribeSubject DecodingParams
                -> MemberSelector(Selector=DecoderFilename)
                -> PropertyMapping(DecoderFileName) => #3
                SubscribeSubject DecodingParams
                -> MemberSelector(Selector=DynamicsFilename)
                -> PropertyMapping(DynamicsFileName) => #6
                IntProperty(Value=6)
                -> PropertyMapping(StateDimension) => #8
                #0, #3, #6, #8 -> UpdateDecoder
                  BufferSize=1
                  DecoderFileName=C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/andrei/decoder.bin
                  DynamicsFileName=C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/andrei/dynamics.bin
                  StateDimension=6
                -> Bonsai.Dsp.Submatrix(StartRow=4, EndRow=6, StartCol=0, EndCol=nil)
                -> ConvertToVector2
                -> WorkflowOutput
            -> MemberSelector(Selector=X) => #56
            SubscribeSubject OffsetX
            -> PropertyMapping(Value) => #58
            #56, #58 -> Subtract(Operand=FloatProperty(Value=0.16)) => #59
            #55 -> MemberSelector(Selector=Y) => #60
            SubscribeSubject OffsetY
            -> PropertyMapping(Value) => #62
            #60, #62 -> Subtract(Operand=FloatProperty(Value=0)) => #63
            #59, #63 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1 as X,
                Item2 as Y
                )
            -> GroupWorkflow UpdateCursor => #66
                SubscribeSubject Cursor => #0
                WorkflowInput Source1
                -> InputMapping(X(Selector=X), Y(Selector=Y))
                -> Bonsai.Shaders.CreateVector3(X=-0.000191643834, Y=-0.00243872521, Z=0) => #3
                #3, #0 -> CombineLatest
                -> InputMapping(Selector=Item2, Position(Selector="Item1.X,Item1.Y,Item1.Z"))
                -> Bonsai.Physics.SetTransform(Position(X=-0.00019164383411407471, Y=-0.0024387252051383257, Z=0), Orientation=nil)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Position.X as LocationX,
                    Position.Y as LocationY,
                    2*Radius as Diameter)
                -> WorkflowOutput
            Source2=#66 -> PublishSubject CursorTrajectory
        -> Bonsai.Osc.SendMessage(Connection=ResponseServer, Address=/trial_done)
        -> WorkflowOutput
    #3, #5 -> Bonsai.IO.CsvWriter
      FileName=C:/Users/spencer/data/emg_olympics/andrei/center_hold/session_1/session_result_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    -> WorkflowOutput
-> Switch
-> MemberSelector(Selector=Outcome)
-> SelectMany DrawResult
    SubscribeSubject Draw
    -> Take(Count=75) => #1
    WorkflowInput Source1
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it == "Hit" ? "Hit" : ""
    -> PropertyMapping(Text) => #4
    #1, #4 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawText.bonsai
      Text=""
      Font="Microsoft Sans Serif, 150pt"
      Alignment=Center
      LineAlignment=Center
      TextRenderingHint=AntiAliasGridFit
      Color(Val0=255, Val1=255, Val2=255, Val3=255)
      ExtentX=1
      ExtentY=1
      LocationX=0
      LocationY=0
      Layer=0
      Angle=0
    -> WorkflowOutput

Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag="", Connection=CommandServer)
-> Bonsai.Shaders.SampleOnUpdateFrame
-> Take(Count=1)
-> WorkflowOutput

FloatProperty(Value=0.16)
-> BehaviorSubject OffsetX

FloatProperty(Value=0)
-> BehaviorSubject OffsetY
