<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Physics.Collision;assembly=Bonsai.Physics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p3="clr-namespace:Bonsai.Physics;assembly=Bonsai.Physics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>CommandServer</osc:Name>
          <osc:Port>5005</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>ResponseServer</osc:Name>
          <osc:Port>1006</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>5006</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TriggeredAcquisition.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>One</gl:SourceFactor>
              <gl:DestinationFactor>One</gl:DestinationFactor>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateHashSpace">
          <p1:MinLevel xsi:nil="true" />
          <p1:MaxLevel xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="ResourceSubject">
        <Name>Space</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Space</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSphere">
          <p1:Enabled>true</p1:Enabled>
          <p1:CategoryBits>1</p1:CategoryBits>
          <p1:CollideBits xsi:nil="true" />
          <p1:Position xsi:nil="true" />
          <p1:Orientation xsi:nil="true" />
          <p1:Radius>0.05</p1:Radius>
        </Combinator>
      </Expression>
      <Expression xsi:type="ResourceSubject">
        <Name>Cursor</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/decoding_params</osc:Address>
        <osc:TypeTag>ssss</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as DecoderFilename,
Item2 as DynamicsFilename,
Item3 as VariancePath,
Item4 as OffsetPath
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DecodingParams</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/trial_params</osc:Address>
        <osc:TypeTag>sfffiii</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as TrialIndex,
Item2 as TargetX,
Item3 as TargetY,
Item4 as Radius,
Item5 as TimeoutTime,
Item6 as HoldingTime,
Item7 as ReachTime
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RecordingParams</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SamplingFreq</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SampleRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RecordingParams</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>NumChannels</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="NumChannels" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EmgData</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Channel56Zero</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>0</dsp:StartRow>
                <dsp:EndRow>56</dsp:EndRow>
                <dsp:StartCol>0</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>56</dsp:StartRow>
                <dsp:EndRow>57</dsp:EndRow>
                <dsp:StartCol>0</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>S32</dsp:Depth>
                <dsp:Scale>0</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>57</dsp:StartRow>
                <dsp:EndRow xsi:nil="true" />
                <dsp:StartCol>0</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Submatrix">
          <dsp:StartRow>0</dsp:StartRow>
          <dsp:EndRow>64</dsp:EndRow>
          <dsp:StartCol>0</dsp:StartCol>
          <dsp:EndCol xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>2000</dsp:SampleRate>
          <dsp:Cutoff1>0.1</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:KernelLength>250</dsp:KernelLength>
          <dsp:FilterType>HighPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DecodingParams</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>VariancePath</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="VarianceFileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:StandardizeEMG">
          <p2:VarianceFileName>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/bob/variance.bin</p2:VarianceFileName>
          <p2:NumChannels>64</p2:NumChannels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>2000</dsp:SampleRate>
          <dsp:Cutoff1>5</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:KernelLength>750</dsp:KernelLength>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Submatrix">
          <dsp:StartRow>0</dsp:StartRow>
          <dsp:EndRow xsi:nil="true" />
          <dsp:StartCol>0</dsp:StartCol>
          <dsp:EndCol>1</dsp:EndCol>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>FilteredEMG</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>RecordingParams</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>SamplingFreq</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="SampleRate" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>RecordingParams</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>SamplingFreq</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="SampleRate" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>RecordingParams</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>NumChannels</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="NumChannels" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>EmgData</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:ConvertScale">
            <dsp:Depth>F32</dsp:Depth>
            <dsp:Scale>1</dsp:Scale>
            <dsp:Shift>0</dsp:Shift>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Submatrix">
            <dsp:StartRow>0</dsp:StartRow>
            <dsp:EndRow>64</dsp:EndRow>
            <dsp:StartCol>0</dsp:StartCol>
            <dsp:EndCol xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FrequencyFilter">
            <dsp:SampleRate>2000</dsp:SampleRate>
            <dsp:Cutoff1>0.1</dsp:Cutoff1>
            <dsp:Cutoff2>0</dsp:Cutoff2>
            <dsp:KernelLength>250</dsp:KernelLength>
            <dsp:FilterType>HighPass</dsp:FilterType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DecodingParams</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>VariancePath</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="VarianceFileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p2:StandardizeEMG">
            <p2:VarianceFileName>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/bob/variance.bin</p2:VarianceFileName>
            <p2:NumChannels>64</p2:NumChannels>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Abs" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FrequencyFilter">
            <dsp:SampleRate>2000</dsp:SampleRate>
            <dsp:Cutoff1>5</dsp:Cutoff1>
            <dsp:Cutoff2>0</dsp:Cutoff2>
            <dsp:KernelLength>750</dsp:KernelLength>
            <dsp:FilterType>LowPass</dsp:FilterType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>RecordingParams</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>NumChannels</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="ChannelCount" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DecodingParams</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>OffsetPath</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="Path" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixReader">
            <dsp:Path>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/miranda/offsets.bin</dsp:Path>
            <dsp:FileName>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/miranda/offsets.bin</dsp:FileName>
            <dsp:Offset>0</dsp:Offset>
            <dsp:SampleRate>0</dsp:SampleRate>
            <dsp:ChannelCount>64</dsp:ChannelCount>
            <dsp:BufferLength>1</dsp:BufferLength>
            <dsp:Depth>F32</dsp:Depth>
            <dsp:Layout>RowMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Add" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\Channel56Zero.bonsai" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Reduce">
            <dsp:Axis>0</dsp:Axis>
            <dsp:Operation>Avg</dsp:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CursorTrajectory</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LocationX</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CursorTrajectory</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LocationY</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Radius</Selector>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="FloatProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Diameter" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <LocationX>-0.00439974666</LocationX>
        <LocationY>0.0031683445</LocationY>
        <Layer>10</Layer>
        <Diameter>0.1</Diameter>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DecodeEMG</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilteredEMG</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DecoderFilename</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DecoderFileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DynamicsFilename</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DynamicsFileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="StateDimension" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:UpdateDecoder">
                <p2:BufferSize>1</p2:BufferSize>
                <p2:DecoderFileName>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/bob/decoder.bin</p2:DecoderFileName>
                <p2:DynamicsFileName>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/bob/dynamics.bin</p2:DynamicsFileName>
                <p2:StateDimension>6</p2:StateDimension>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>4</dsp:StartRow>
                <dsp:EndRow>6</dsp:EndRow>
                <dsp:StartCol>0</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ConvertToVector2" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="9" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OffsetX</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="FloatProperty">
          <Value>-0.45</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OffsetY</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="FloatProperty">
          <Value>1.3</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as X,
Item2 as Y
)</scr:Expression>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateCursor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cursor</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>-0.00439974666</gl:X>
                <gl:Y>0.0031683445</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Position" Selector="Item1.X,Item1.Y,Item1.Z" />
              </PropertyMappings>
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:SetTransform">
                <p3:Position>
                  <p3:X>-0.0043997466564178467</p3:X>
                  <p3:Y>0.0031683444976806641</p3:Y>
                  <p3:Z>0</p3:Z>
                </p3:Position>
                <p3:Orientation xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>CursorTrajectory</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-0.45</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>OffsetX</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1.3</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>OffsetY</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Diameter" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>-10</Layer>
        <Diameter>0.2</Diameter>
        <ColorR>0</ColorR>
        <ColorG>1</ColorG>
        <ColorB>0.2</ColorB>
        <ColorA>1</ColorA>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="31" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="35" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="35" Label="Source0" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source3" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="58" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="52" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="56" Label="Source2" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="56" Label="Source0" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source3" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="66" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="65" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source2" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="70" To="81" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="81" Label="Source2" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="81" Label="Source3" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="79" To="80" Label="Source1" />
      <Edge From="80" To="81" Label="Source4" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="82" To="87" Label="Source1" />
      <Edge From="83" To="86" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="86" Label="Source2" />
      <Edge From="86" To="91" Label="Source1" />
      <Edge From="87" To="90" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="90" Label="Source2" />
      <Edge From="90" To="91" Label="Source2" />
      <Edge From="91" To="92" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source2" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="97" To="98" Label="Source1" />
      <Edge From="99" To="106" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
      <Edge From="101" To="106" Label="Source2" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="103" To="106" Label="Source3" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="106" Label="Source4" />
    </Edges>
  </Workflow>
</WorkflowBuilder>